PsychoPy2experiment version="2024.1.1"
Settings
  Data filename = u'data/sub-%s_task-%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '', 'order': '1,2,3,4', 'EEG': 'False', 'EyeLink': 'False', 'EyeTribe': 'False', 'Calibrate': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2024.1.0
  Window size (pixels) = [1440, 900]
  expName = inversion_effect
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine getReady
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    TextComponent text_countdown
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine Fixation
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    CodeComponent drift_correction
      Code Type = Py
      disabled = True
      Begin Routine:
        # we recommend drift-check at the beginning of each trial, in an MRI
        # setup, however, this is not possible and one can do online drift-
        # correction if needed
        # the doDriftCorrect() function requires target position in integers
        # the last two arguments:
        # draw_target (1-default, 0-draw the target then call doDriftCorrect)
        # allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)
        #
        # Skip drift-check if running the script in Dummy Mode
        #while not dummy_mode:
        #    # terminate the task if no longer connected to the tracker or
        #    # user pressed Ctrl-C to terminate the task
        #    if (not el_tracker.isConnected()) or el_tracker.breakPressed():
        #        terminate_task()
        #
        #    # drift-check and re-do camera setup if ESCAPE is pressed
        #    try:
        #        error = el_tracker.doDriftCorrect(int(scn_width/2.0),
        #                                          int(scn_height/2.0), 1, 1)
        #        # break following a success drift-check
        #        if error is not pylink.ESC_KEY:
        #            break
        #    except:
        #        pass
    CodeComponent code_fixation
      Code Type = Py
      Begin Experiment:
        # index trials for eyetracking
        trial_index=0
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
        trial_index += 1

        # log a TRIALID message to mark trial start, before starting to record.
        # EyeLink Data Viewer defines the start of a trial by the TRIALID message.
        if expInfo['EyeLink']:
            el_tracker.sendMessage("TRIALID %d" % trial_index)
        if expInfo['EyeTribe']:
            tracker.log_message("TRIALID %d" % trial_index)
      Each Frame:
        if expInfo['EEG'] and text_fixation.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event, event_type="FXN+",label="FXN+",duration=float(fix_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and text_fixation.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,"FXN+") # fixation marker
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and text_fixation.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,"FXN+") # fixation marker
            EYEtriggerSent = True
    TextComponent text_fixation
      durationEstim = 0.5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fix_dur
      text = +
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  Routine EncodeFaces
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    CodeComponent code_encodeFaces
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
      Each Frame:
        if expInfo['eeg'] and fix_cross_faces.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_face_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and fix_cross_faces.status == STARTED and not EYEtriggerSent:
             win.callOnFlip(tracker.log_message,TRG)
             EYEtriggerSent = True
      End Routine:
        #if expInfo['eeg']:
        #    ns.send_event(event_type=TRG, start=fix_cross_faces.started)
    ImageComponent fix_cross_faces
      image = stimuli/fix.BMP
      pos = (0, 0.05)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_face_dur
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    ImageComponent target_face
      image [set every repeat] = $target_1
      pos = (-0.1, 0.15)
      saveStartStop = False
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_face_dur
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  Routine ProbeFaces
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    CodeComponent code_probeFaces
      Code Type = Both
      Begin JS Routine:
        prbL = "white";
        prbR = "white";
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        prbL="white"
        prbR="white"

        rspprobe=0
      Each Frame:
        if expInfo['eeg'] and probe_image.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="PRB+",label=PRB,duration=float(probe_face_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['eyetrack'] and probe_image.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,PRB)
            EYEtriggerSent = True

        if key_resp_face:
            if key_resp_face.keys=='1':
                prbL="blue"
                if expInfo['eeg'] and rspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPL")
                    rspprobe=1
            elif key_resp_face.keys=='2':
                prbR="blue"
                if expInfo['eeg'] and rspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPR")
                    rspprobe=1
      Each JS Frame:
        if (key_resp_face) {
            if ((key_resp_face.keys === "1") || (key_resp_face.keys === "left")) {
                prbL = "blue";
            } else {
                if ((key_resp_face.keys === "2") || (key_resp_face.keys === "right")) {
                    prbR = "blue";
                }
            }
        }
      End JS Routine:
        s_key = key_resp_face.keys;
        if ((s_key === "s")) {
            faces.finished = true;
        }

        thisExp=psychoJS.experiment;

        if ((correct_resp === 1) || (correct_resp === "1")) {
            correctKey = ["1","left"];
        }
        if ((correct_resp === 2) || (correct_resp === "2")) {
            correctKey = ["2","right"];
        }

        if ((key_resp_face.keys === correctKey[0]) || (key_resp_face.keys === correctKey[1])) {
            key_resp_face.corr = true;
        } else {
            key_resp_face.corr = false;
        }

        thisExp.addData("correctKey", correctKey);
        thisExp.addData("key_resp_corr", key_resp_face.corr)
      End Routine:
        if expInfo['eeg'] and rspprobe==0:
            ns.send_event(event_type="RESP",label="MISS")
            rspprobe=1
    ImageComponent probe_image
      image [set every repeat] = $probe_list
      pos = (0, 0.05)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_face_dur
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    KeyboardComponent key_resp_face
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      store = first key
      storeCorrect = True
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    TextComponent faces_LEFT
      color [set every frame] = $prbL
      languageStyle = RTL
      letterHeight = 0.08
      pos = (-0.20,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_face_dur
      units = norm
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      text:
        <--
        Same
    TextComponent faces_RIGHT
      color [set every frame] = $prbR
      letterHeight = 0.08
      pos = (0.20,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_face_dur
      units = norm
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      text:
        -->
        Different
  Routine instrFaces
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    CodeComponent code_restartNS
      Code Type = Py
      disabled = True
      End Routine:
        if expInfo['eeg']:
            # import egi_pynetstation
            from egi_pynetstation.NetStation import NetStation
            # address and port
            ns = NetStation('169.254.111.111', 55513)
            # Set an NTP clock server address as an IPv4 string
            IP_ntp = '169.254.111.111'
            ns.connect(ntp_ip=IP_ntp)
            ns.begin_rec() # Begin recording
            ns.send_event(event_type="STRT",label="STRT",start=0.0)
            # NOTE: when using the event sender, "now".
            # Tests on a Windows 7 machine with PsychoPy indicate that the
            # latency in real time is about 54 +/- 3 ms for a short experiment.

        RunningClock = globalClock.getTime()
        thisExp.addData('RunningClock',RunningClock)

        if expInfo['eyetrack']:
            # import pytribe
            from PyTribe.pytribe import EyeTribe
            # Data file name stem = absolute path + name; later add .psyexp, .csv, .log, etc
            SUB = u'sub-%s' % (expInfo['participant'])
            TIMESTRT = time.strftime("%Y%m%dT%H%M%S")
            EYELOG = u'sub-%s_task-%s_eyetrack_%s' % (expInfo['participant'], expName, TIMESTRT)
            DIR = os.path.dirname(os.path.abspath(__file__))
            LOGFILE = os.path.join(DIR, 'data', EYELOG)
            # start communications with the EyeTribe tracker
            tracker = EyeTribe(logfilename=LOGFILE)
            # start recording gaze data
            tracker.start_recording()
            tracker.log_message("STRT")
    TextComponent text_faces
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = $"In this experiment you will see one face flash before you, this is the target face. You will then see two faces. The faces may either appear upright or upside-down. You must select the face that looks exactly like the target face." + "\n Please press 1 to choose the face on the left side of the screen, press 2 to choose the face on the right side of the screen with the fingers of your preferred hand. Make your choice both as quickly and accurately as you can. Press the spacebar to continue."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instrBodies
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    CodeComponent code_hardware
      Code Type = Both
      Begin Routine:
        if expInfo['EEG']:
            # import egi_pynetstation
            from egi_pynetstation.NetStation import NetStation
            # address and port
            ns = NetStation('169.254.111.111', 55513)
            # Set an NTP clock server address as an IPv4 string
            IP_ntp = '169.254.111.111'
            ns.connect(ntp_ip=IP_ntp)
            ns.begin_rec() # Begin recording
            ns.send_event(event_type="STRT",label="STRT",start=0.0)
            # NOTE: when using the event sender, "now".
            # Tests on a Windows 7 machine with PsychoPy indicate that the
            # latency in real time is about 54 +/- 3 ms for a short experiment.

        RunningClock = globalClock.getTime()
        thisExp.addData('RunningClock',RunningClock)

        if expInfo['Eyetribe']:
            # import pytribe
            from PyTribe.pytribe import EyeTribe
            # Data file name stem = absolute path + name; later add .psyexp, .csv, .log, etc
            SUB = u'sub-%s' % (expInfo['participant'])
            TIMESTRT = time.strftime("%Y%m%dT%H%M%S")
            #EYELOG = SUB + '_task-swm_acq-eyetribe_eyetrack_' + TIMESTRT
            EYELOG = u'sub-%s_task-sdrt_eyetrack_%s' % (expInfo['participant'], TIMESTRT)
            DIR = os.path.dirname(os.path.abspath(__file__))
            LOGFILE = os.path.join(DIR, 'data', EYELOG)
            #EYELOG = _thisDir + os.sep + u'data/sub-%s_task-%s_eyetrack_%s' % (expInfo['participant'], expName, expInfo['date'])
            # start communications with the EyeTribe tracker
            tracker = EyeTribe(logfilename=LOGFILE)
            # start recording gaze data
            tracker.start_recording()
            #tracker.log_message("recording_started")
            tracker.log_message("STRT")
      End Experiment:
        #if expInfo['eeg']:
        #    ns.end_rec()
        #    ns.disconnect()

        #if expInfo['eyetrack']:
            # stop recording
        #    tracker.stop_recording()
            # close connection to the tracker
        #    tracker.close()
      End JS Experiment:
        document.body.style.cursor='auto';
    TextComponent text_instruct
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"In this experiment you will see one body flash before you, this is the target body. You will then see two bodies. The bodies may either appear upright or upside-down. You must select the body that looks exactly like the target body." + "\n Please press 1 to choose the body on the left side of the screen, press 2 to choose the body on the right side of the screen with the fingers of your preferred hand. Make your choice both as quickly and accurately as you can. Press the spacebar to continue."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
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    CodeComponent EyelinkCode
      Code Type = Py
      disabled = True
      Before Experiment:
        #import pylink
        import platform
        import time
        import random as randomITI
        #from hardware.EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from psychopy import monitors
        from string import ascii_letters, digits
      Begin Experiment:
        # Set this variable to True if you use the built-in retina screen as your
        # primary display device on macOS. If have an external monitor, set this
        # variable True if you choose to "Optimize for Built-in Retina Display"
        # in the Displays preference settings.
        use_retina = False

        # Set this variable to True to run the script in "Dummy Mode"
        #dummy_mode = True

        # Set this variable to True to run the task in full screen mode
        # It is easier to debug the script in non-fullscreen mode
        full_screen = True

        # Set up EDF data file name and local data folder
        #
        # The EDF data filename should not exceed 8 alphanumeric characters
        # use ONLY number 0-9, letters, & _ (underscore) in the filename
        participant_id = expInfo['participant'][:5]  # Limit participant ID to 5 chars
        session_num = expInfo['session'][:1]  # Assume session info is provided in expInfo
        edf_fname = f'{participant_id}IE{session_num}'

        if expInfo['EyeLink']:
            # Validate filename: Only keep allowed characters
            allowed_char = ascii_letters + digits + '_'
            edf_fname = ''.join([c for c in edf_fname if c in allowed_char])

            if len(edf_fname) == 0:
                print("ERROR: Invalid or empty participant ID for EDF filename.")
                core.quit()  # Exit if no valid filename is generated

        # Set up a folder to store the EDF data files and the associated resources
        # e.g., files defining the interest areas used in each trial
        results_folder = 'data'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y-%m-%dT%H%M", time.localtime())
        session_sname=u'sub-%s' % (expInfo['participant'])
        session_edfname = session_sname + '_task-IET_eyetrack'
        session_identifier = session_edfname + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(results_folder, session_sname, 'eyetrack')
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        # Step 1: Connect to the EyeLink Host PC
        #
        # The Host IP address, by default, is "100.1.1.1".
        # the "el_tracker" objected created here can be accessed through the Pylink
        # Set the Host PC address to "None" (without quotes) to run the script
        # in "Dummy Mode"
        #if dummy_mode:
        if not expInfo['EyeLink']:
            dummy_mode = True
            el_tracker = pylink.EyeLink(None)
        else:
            dummy_mode = False
            try:
                el_tracker = pylink.EyeLink("100.1.1.1")
            except RuntimeError as error:
                print('ERROR:', error)
                core.quit()
                sys.exit()

        # Step 2: Open an EDF data file on the Host PC
        edf_file = edf_fname + ".edf"
        try:
            el_tracker.openDataFile(edf_file)
        except RuntimeError as err:
            print('ERROR:', err)
            # close the link if we have one open
            if el_tracker.isConnected():
                el_tracker.close()
            core.quit()
            sys.exit()

        # Add a header text to the EDF file to identify the current experiment name
        # This is OPTIONAL. If your text starts with "RECORDED BY " it will be
        # available in DataViewer's Inspector window by clicking
        # the EDF session node in the top panel and looking for the "Recorded By:"
        # field in the bottom panel of the Inspector.
        preamble_text = 'RECORDED BY %s' % os.path.basename(__file__)
        el_tracker.sendCommand("add_file_preamble_text '%s'" % preamble_text)

        # Step 3: Configure the tracker
        #
        # Put the tracker in offline mode before we change tracking parameters
        el_tracker.setOfflineMode()

        # Get the software version:  1-EyeLink I, 2-EyeLink II, 3/4-EyeLink 1000,
        # 5-EyeLink 1000 Plus, 6-Portable DUO
        eyelink_ver = 0  # set version to 0, in case running in Dummy mode
        if not dummy_mode:
            vstr = el_tracker.getTrackerVersionString()
            eyelink_ver = int(vstr.split()[-1].split('.')[0])
            # print out some version info in the shell
            print('Running experiment on %s, version %d' % (vstr, eyelink_ver))

        # File and Link data control
        # what eye events to save in the EDF file, include everything by default
        file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # what eye events to make available over the link, include everything by default
        link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
        # what sample data to save in the EDF data file and to make available
        # over the link, include the 'HTARGET' flag to save head target sticker
        # data for supported eye trackers
        if eyelink_ver > 3:
            # add "HTARGET" to record possible target data for EyeLink Remote.
            # HMARKER (originally for Eyelink2's infrared head tracking markers) and
            # INPUT (originally for the TTL lines) are jury-rigged to hold the extra data.
            # You can also set file_sample_data to collect raw samples in the .edf file.
            # CAUTION: It may or may not work on your setup with your tracker.
            file_sample_flags = 'LEFT,RIGHT,GAZE,AREA,GAZERES,HREF,PUPIL,STATUS,HTARGET,INPUT,HMARKER'
            #file_sample_flags = 'LEFT,RIGHT,GAZE,AREA,GAZERES,HREF,PUPIL,STATUS,INPUT,HMARKER'
            link_sample_flags = 'LEFT,RIGHT,GAZE,AREA,GAZERES,HREF,PUPIL,STATUS,INPUT,HMARKER'
        else:
            file_sample_flags = 'LEFT,RIGHT,GAZE,HREF,RAW,AREA,GAZERES,BUTTON,STATUS,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,STATUS,INPUT'
        el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
        el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
        el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
        el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)

        # Optional tracking parameters
        # Sample rate, 250, 500, 1000, or 2000, check your tracker specification
        if eyelink_ver > 2:
            el_tracker.sendCommand("sample_rate 500")
        # Choose a calibration type, H3, HV3, HV5, HV13 (HV = horizontal/vertical),
        el_tracker.sendCommand("calibration_type = HV13")
        # Set a gamepad button to accept calibration/drift check target
        # You need a supported gamepad/button box that is connected to the Host PC
        #el_tracker.sendCommand("button_function 5 'accept_target_fixation'")

        # Optional -- Shrink the spread of the calibration/validation targets
        # if the default outermost targets are not all visible in the bore.
        # The default <x, y display proportion> is 0.88, 0.83 (88% of the display
        # horizontally and 83% vertically)
        #el_tracker.sendCommand('calibration_area_proportion 0.88 0.83')
        #el_tracker.sendCommand('validation_area_proportion 0.88 0.83')

        # Step 4: set up a graphics environment for calibration
        #
        # Open a window, be sure to specify monitor parameters
        mon = monitors.Monitor('myMonitor', width=24.0, distance=75.0)

        # Setup the Window
        #win = visual.Window(
        #    size=[1920, 1080], fullscr=full_screen, screen=1,
        #    winType='pyglet', allowGUI=True, allowStencil=False,
        #    monitor=mon, color=[0.300,0.300,0.300], colorSpace='rgb',
        #    blendMode='avg', useFBO=True,
        #    units='pix')

        # store frame rate of monitor if we can measure it
        expInfo['frameRate'] = win.getActualFrameRate()
        if expInfo['frameRate'] != None:
            frameDur = 1.0 / round(expInfo['frameRate'])
        else:
            frameDur = 1.0 / 60.0  # could not measure, so guess

        # get the native screen resolution used by PsychoPy
        scn_width, scn_height = win.size
        # resolution fix for Mac retina displays
        if 'Darwin' in platform.system():
            if use_retina:
                scn_width = int(scn_width/2.0)
                scn_height = int(scn_height/2.0)

        # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
        # see the EyeLink Installation Guide, "Customizing Screen Settings"
        el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendCommand(el_coords)

        # Write a DISPLAY_COORDS message to the EDF file
        # Data Viewer needs this piece of info for proper visualization, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
        el_tracker.sendMessage(dv_coords)


        # Configure a graphics environment (genv) for tracker calibration
        genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
        print(genv)  # print out the version number of the CoreGraphics library

        # Set background and foreground colors for the calibration target
        # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
        foreground_color = (1, 1, 1)
        background_color = win.color
        genv.setCalibrationColors(foreground_color, background_color)

        # Set up the calibration target
        #

        # Use the default calibration target ('circle')
        genv.setTargetType('circle')

        # Configure the size of the calibration target (in pixels)
        # this option applies only to "circle" and "spiral" targets
        genv.setTargetSize(28)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('off', 'off', 'off')

        # resolution fix for macOS retina display issues
        if use_retina:
            genv.fixMacRetinaDisplay()

        # Request Pylink to use the PsychoPy window we opened above for calibration
        pylink.openGraphicsEx(genv)

        # ##############################################################################
        # define a few helper functions for trial handling
        # ##############################################################################

        def clear_screen(win):
            """ clear up the PsychoPy window"""

            win.fillColor = genv.getBackgroundColor()
            win.flip()


        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""

            msg = visual.TextStim(win, text,
                                  font='Arial',
                                  pos=(0, 0), height=0.03, ori=0,
                                  color='black', colorSpace='rgb', opacity=1,
                                  languageStyle='LTR', depth=0.0,
                                  wrapWidth=scn_width/2,
                                  units='height')

            clear_screen(win)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys()
                clear_screen(win)


        def terminate_task():
            """
            Terminate the task gracefully and retrieve the EDF data file

            file_to_retrieve: The EDF on the Host that we would like to download
            win: the current window used by the experimental script
            """

            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():
                # Terminate the current trial first if the task terminated prematurely
                error = el_tracker.isRecording()
                if error == pylink.TRIAL_OK:
                    abort_trial()

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
                msg = 'EDF data is transferring from EyeLink Host PC...'
                show_msg(win, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.edf')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()


        def abort_trial():
            """Ends recording"""

            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # clear the screen
            clear_screen(win)
            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)

            return pylink.TRIAL_ERROR


        if expInfo['Calibrate']:
            # Show the task instructions
            if not dummy_mode:
                task_msg = 'In a moment, we will calibrate the eye tracker.\n' + \
                           'Please look at the dots whenever they appear on the screen.\n\n' + \
                           'Press ENTER twice to open the calibration menu.'
                show_msg(win, task_msg)
                # Set up the camera and calibrate the tracker, if not running in dummy mode
                try:
                    el_tracker.doTrackerSetup()
                except RuntimeError as err:
                    print('ERROR during calibration:', err)
                    el_tracker.exitCalibration()

        # ------Start EyeLink Recording-------
        # put tracker in idle/offline mode before recording
        el_tracker.setOfflineMode()

        # Start recording, at the beginning of a new run
        # arguments: sample_to_file, events_to_file, sample_over_link,
        # event_over_link (1-yes, 0-no)
        try:
            el_tracker.startRecording(1, 1, 1, 1)
        except RuntimeError as error:
            print("ERROR:", error)
            terminate_task()

        # Allocate some time for the tracker to cache some samples
        pylink.pumpDelay(100)
      End Experiment:
        if expInfo['EyeLink']:
            # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)

            # stop recording; add 100 msec to catch final events before stopping
            pylink.pumpDelay(100)
            el_tracker.stopRecording()

            terminate_task() # EyeLink exit
    CodeComponent code_start
      Code Type = Py
      Before Experiment:
        import platform
        import time
        import random as randomITI
        #from hardware.EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from psychopy import monitors
        from string import ascii_letters, digits

        upright_flag=0
        inverted_flag=0
        msg=""
      Begin Routine:
        win.mouseVisible = False

        # determine block order
        if expInfo['order']==1:
            order_list="stimuli/faces_blockList1.csv"
        elif expInfo['order']==2:
            order_list="stimuli/faces_blockList2.csv"
        elif expInfo['order']==3:
            order_list="stimuli/faces_blockList3.csv"
        elif expInfo['order']==4:
            order_list="stimuli/faces_blockList4.csv"
  Routine ITI
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    CodeComponent code_iti
      Code Type = Py
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      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        # iti_dur + random number between 0 and 0.3
        iti_jittered=iti_dur+randomITI.uniform(0, 0.3)
        thisExp.addData("iti_jittered", iti_jittered)
      Each Frame:
        if expInfo['EEG'] and text_iti.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="ITI+",label="ITI+",duration=float(isi_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and text_iti.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,"ITI")
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and text_iti.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,"ITI")
            EYEtriggerSent = True
      End Routine:
        if expInfo['EyeLink']:
            # record trial variables to the EDF data file, for details, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('!V TRIAL_VAR condition %s' % cond)
            el_tracker.sendMessage('!V TRIAL_VAR orientation %s' % orient)
            el_tracker.sendMessage('!V TRIAL_VAR image_target %s' % target_list)
            el_tracker.sendMessage('!V TRIAL_VAR image_probe_left %s' % probe_L)
            el_tracker.sendMessage('!V TRIAL_VAR image_probe_right %s' % probe_R)
            #el_tracker.sendMessage('!V TRIAL_VAR RT %d' % RT)
            # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)
    TextComponent text_iti
      durationEstim = 2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_jittered
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  Routine ISI
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    CodeComponent code_isi
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        # isi_dur + random number between 0 and 0.2
        isi_jittered=isi_dur+randomITI.uniform(0, 0.2)
        thisExp.addData("isi_jittered", isi_jittered)
      Each Frame:
        if expInfo['EEG'] and text_isi.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="ISI+",label=ISI,duration=float(maint_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and text_isi.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,"ISI+")
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and text_isi.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,"ISI+") # fixation marker
            EYEtriggerSent = True
    TextComponent text_isi
      durationEstim = 2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = isi_jittered
      text [set every repeat] = +
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  Routine FB_Practice
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    CodeComponent code_FB_Practice
      Code Type = Py
      disabled = True
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      Begin Routine:
        # get reaction time and accuracy
        pmeanRT_up = trials_practice_up.data['key_resp_up_prac.rt'].mean()
        pacc_up = trials_practice_up.data['key_resp_up_prac.corr'].sum()
        # calculate percent accuracy
        num_up = trials_practice_up.nTotal

        # get reaction time and accuracy
        pmeanRT_inv = trials_practice_inv.data['key_resp_inv_prac.rt'].mean()
        pacc_inv = trials_practice_inv.data['key_resp_inv_prac.corr'].sum()
        # calculate percent accuracy
        num_inv = trials_practice_inv.nTotal

        pmeanRT=(pmeanRT_up+pmeanRT_inv)/2 # mean RT
        pacc=(pacc_up+pacc_inv)/2 # mean accuracy
        num=num_up+num_inv # total N
        ppacc=(pacc/num)*100
        # message for display
        msg = "You got %0.2f %% correct. \nYour response time is %0.2f sec." %(ppacc,pmeanRT)
    TextComponent text_Practice
      durationEstim = 10
      letterHeight = 0.06
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg + "\n\n Please remember to press the LEFT BUTTON to choose the image on the left, or press the RIGHT BUTTON to choose the image on the right. Try to make your choice as quickly and accurately as possible." + "\n\n Press SPACEBAR to start." 
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp_endPractice
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrPractice
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    TextComponent text_practice
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"In this task, you will see images of faces." + "\n During each trial, one image will flash before you—this is the target image. Afterward, two images will appear side by side. Your task is to select the image that looks exactly like the target image." + "\n\n Please press the LEFT BUTTON to choose the image on the left, or press the RIGHT BUTTON to choose the image on the right. Try to make your choice as quickly and accurately as possible." + "\n\n Press SPACEBAR to practice."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYou
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    TextComponent text_thanks
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = $"Thank you for your participation!" + "\n\n Please wait until the task is complete before exiting the browser."
      units = norm
      wrapWidth = 1.8
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  Routine IBI
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    TextComponent text_ibi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine EncodingUpright
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    CodeComponent code_encode_upright
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
        orient = "upright" # trial categorization
        # Add the variable to a new column in the output file
        thisExp.addData("orient", orient)
      Each Frame:
        if expInfo['EEG'] and image_target_upright.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and image_target_upright.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,target_list)
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and image_target_upright.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,target_list)
            EYEtriggerSent = True
    ImageComponent image_target_upright
      durationEstim = 2
      image [set every repeat] = $target_list
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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  Routine ProbeUpright
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    CodeComponent code_probe_upright
      Code Type = Py
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      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        EEGrspprobe=0
        EYErspprobe=0
      Each Frame:
        if expInfo['EEG'] and image_probe_upright_left.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="PRB+",label=PRB,duration=float(probe_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and image_probe_upright_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,probe_L)
            win.callOnFlip(el_tracker.sendMessage,probe_R)
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and image_probe_upright_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,probe_L)
            win.callOnFlip(tracker.log_message,probe_R)
            EYEtriggerSent = True

        ## Look for Key Response
        if key_resp_upright:
            if key_resp_upright.keys=='1':
                if expInfo['EEG'] and EEGrspprobe==0:
                    #ns.send_event(event_type="RESP",label="RSPL")
                    EEGrspprobe=1
                if expInfo['EyeLink'] and EYErspprobe==0:
                    win.callOnFlip(el_tracker.sendMessage,'RSPL')
                    EYErspprobe=1
                if expInfo['EyeTribe'] and EYErspprobe==0:
                    win.callOnFlip(tracker.log_message,'RSPL')
                    EYErspprobe=1
            elif key_resp_upright.keys=='2':
                if expInfo['EEG'] and EEGrspprobe==0:
                    #ns.send_event(event_type="RESP",label="RSPR")
                    EEGrspprobe=1
                if expInfo['EyeLink'] and EYErspprobe==0:
                    win.callOnFlip(el_tracker.sendMessage,'RSPR')
                    EYErspprobe=1
                if expInfo['EyeTribe'] and EYErspprobe==0:
                    win.callOnFlip(tracker.log_message,'RSPR')
                    EYErspprobe=1
      End Routine:
        if expInfo['EEG'] and rspprobe==0:
            #ns.send_event(event_type="RESP",label="MISS")
            EEGrspprobe=1
        if expInfo['EyeLink'] and rspprobe==0:
            win.callOnFlip(el_tracker.sendMessage,'MISS')
            EYErspprobe=1
        if expInfo['EyeTribe'] and rspprobe==0:
            win.callOnFlip(tracker.log_message,'MISS')
            EYErspprobe=1
    ImageComponent image_probe_upright_left
      durationEstim = 3
      image [set every repeat] = $probe_L
      pos = (-0.25, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    ImageComponent image_probe_upright_right
      durationEstim = 3
      image [set every repeat] = $probe_R
      pos = (0.25, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    KeyboardComponent key_resp_upright
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      durationEstim = 3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      store = first key
      storeCorrect = True
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  Routine EncodingInverted
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    CodeComponent code_encode_inverted
      Code Type = Py
      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
        orient = "inverted" # trial categorization
        # Add the variable to a new column in the output file
        thisExp.addData("orient", orient)
      Each Frame:
        if expInfo['EEG'] and image_target_inverted.status == STARTED and not EEGtriggerSent:
            win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and image_target_inverted.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,target_list)
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and image_target_inverted.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,target_list)
            EYEtriggerSent = True
    ImageComponent image_target_inverted
      durationEstim = 2
      flipVert = True
      image [set every repeat] = $target_list
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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  Routine ProbeInverted
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    CodeComponent code_probe_inverted
      Code Type = Py
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      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False

        EEGrspprobe=0
        EYErspprobe=0
      Each Frame:
        if expInfo['EEG'] and image_probe_inverted_left.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="PRB+",label=PRB,duration=float(probe_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and image_probe_inverted_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,probe_L)
            win.callOnFlip(el_tracker.sendMessage,probe_R)
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and image_probe_inverted_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,probe_L)
            win.callOnFlip(tracker.log_message,probe_R)
            EYEtriggerSent = True

        ## Look for Key Response
        if key_resp_inverted:
            if key_resp_inverted.keys=='1':
                if expInfo['EEG'] and EEGrspprobe==0:
                    #ns.send_event(event_type="RESP",label="RSPL")
                    EEGrspprobe=1
                if expInfo['EyeLink'] and EYErspprobe==0:
                    win.callOnFlip(el_tracker.sendMessage,'RSPL')
                    EYErspprobe=1
                if expInfo['EyeTribe'] and EYErspprobe==0:
                    win.callOnFlip(tracker.log_message,'RSPL')
                    EYErspprobe=1
            elif key_resp_inverted.keys=='2':
                if expInfo['EEG'] and EEGrspprobe==0:
                    ns.send_event(event_type="RESP",label="RSPR")
                    EEGrspprobe=1
                if expInfo['EyeLink'] and EYErspprobe==0:
                    win.callOnFlip(el_tracker.sendMessage,'RSPR')
                    EYErspprobe=1
                if expInfo['EyeTribe'] and EYErspprobe==0:
                    win.callOnFlip(tracker.log_message,'RSPR')
                    EYErspprobe=1
      End Routine:
        if expInfo['EEG'] and rspprobe==0:
            #ns.send_event(event_type="RESP",label="MISS")
            EEGrspprobe=1
        if expInfo['EyeLink'] and rspprobe==0:
            win.callOnFlip(el_tracker.sendMessage,'MISS')
            EYErspprobe=1
        if expInfo['EyeTribe'] and rspprobe==0:
            win.callOnFlip(tracker.log_message,'MISS')
            EYErspprobe=1
    ImageComponent image_probe_inverted_left
      durationEstim = 3
      flipVert = True
      image [set every repeat] = $probe_L
      pos = (-0.25, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    ImageComponent image_probe_inverted_right
      durationEstim = 3
      flipVert = True
      image [set every repeat] = $probe_R
      pos = (0.25, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    KeyboardComponent key_resp_inverted
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      durationEstim = 3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      store = first key
      storeCorrect = True
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  Routine FeedbackUpright
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    CodeComponent code_upright_Feedback
      Code Type = Py
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      Begin Routine:
        # get reaction time and accuracy
        meanRt = trials_upright.data['key_resp_upright.rt'].mean()
        acc = trials_upright.data['key_resp_upright.corr'].sum()
        # calculate percent accuracy
        num = trials_upright.nTotal
        pacc=(acc/num)*100
        # message for display
        msg = "Great Job !!!!!!\n\nYou got %0.2f %% correct. \nYour response time is %.2f sec." %(pacc,meanRt)

        core.wait(5) # sleep 5 seconds
        #if expInfo['EEG']:
            #ns.send_event(event_type="STOP")
            #ns.end_rec()
            #ns.disconnect()
        #if expInfo['EyeLink']:
            #
        #if expInfo['EyeTribe']:
            #tracker.log_message("Block_End") # stop recording
            #tracker.stop_recording()
            # close connection to the tracker
            #tracker.close()
    TextComponent text_upright_feedback
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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  Routine FeedbackInverted
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    CodeComponent code_inverted_Feedback
      Code Type = Py
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      Begin Routine:
        # get reaction time and accuracy
        meanRt = trials_upright.data['key_resp_inverted.rt'].mean()
        acc = trials_upright.data['key_resp_inverted.corr'].sum()
        # calculate percent accuracy
        num = trials_upright.nTotal
        pacc=(acc/num)*100
        # message for display
        msg = "Great Job !!!!!!\n\nYou got %0.2f %% correct. \nYour response time is %.2f sec." %(pacc,meanRt)

        core.wait(5) # sleep 5 seconds
        #if expInfo['EEG']:
            #ns.send_event(event_type="STOP")
            #ns.end_rec()
            #ns.disconnect()
        #if expInfo['EyeLink']:
            #
        #if expInfo['EyeTribe']:
            #tracker.log_message("STOP") # stop recording
            #tracker.stop_recording()
            # close connection to the tracker
            #tracker.close()
    TextComponent text_inverted_feedback
      durationEstim = 5
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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  Routine ProbeUpPractice
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    CodeComponent code_probePrac_up
      Code Type = Py
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      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
      Each Frame:
        if expInfo['EEG'] and image_probePrac_up_left.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            #win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and image_probePrac_up_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,probe_L)
            win.callOnFlip(el_tracker.sendMessage,probe_R)
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and image_probePrac_up_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,probe_L)
            win.callOnFlip(tracker.log_message,probe_R)
            EYEtriggerSent = True
    ImageComponent image_probePrac_up_left
      durationEstim = 3
      image [set every repeat] = $probe_L
      pos = (-0.2, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    ImageComponent image_probePrace_up_right
      durationEstim = 3
      image [set every repeat] = $probe_R
      pos = (0.2, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    KeyboardComponent key_resp_up_prac
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      durationEstim = 3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      store = first key
      storeCorrect = True
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  Routine ProbeInvPractice
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    CodeComponent code_probePrac_inv
      Code Type = Py
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      Begin Routine:
        EEGtriggerSent = False
        EYEtriggerSent = False
      Each Frame:
        if expInfo['EEG'] and image_probePrac_inv_left.status == STARTED and not EEGtriggerSent:
            #win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            #win.callOnFlip(ns.send_event,event_type="STIM",label=TRG,duration=float(target_dur)) #Send the trigger, synced to the screen refresh
            EEGtriggerSent = True
        if expInfo['EyeLink'] and image_probePrac_inv_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(el_tracker.sendMessage,probe_L)
            win.callOnFlip(el_tracker.sendMessage,probe_R)
            EYEtriggerSent = True
        if expInfo['EyeTribe'] and image_probePrac_inv_left.status == STARTED and not EYEtriggerSent:
            win.callOnFlip(tracker.log_message,probe_L)
            win.callOnFlip(tracker.log_message,probe_R)
            EYEtriggerSent = True
    ImageComponent image_probePrac_inv_left
      durationEstim = 3
      flipVert = True
      image [set every repeat] = $probe_L
      pos = (-0.2, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    ImageComponent image_probePrace_inv_right
      durationEstim = 3
      flipVert = True
      image [set every repeat] = $probe_R
      pos = (0.2, 0)
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
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    KeyboardComponent key_resp_inv_prac
      allowedKeys = '1','left','2','right','s'
      correctAns = $correct_resp
      durationEstim = 3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probe_dur
      store = first key
      storeCorrect = True
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Flow
  Routine Start
  Routine instrPractice
  LoopInitiator blocks_practice loopType="TrialHandler"
    conditions = [OrderedDict([('block_list', 'stimuli/practice_stimuli.csv'), ('fix_dur', 0.5), ('target_dur', 5), ('isi_dur', 0.5), ('probe_dur', 3), ('iti_dur', 0.5), ('stim_size', 0.41)])]
    conditionsFile = stimuli/practice_blockList.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine getReady
    LoopInitiator trials_practice_up loopType="TrialHandler"
      Selected rows = 0:1
      conditionsFile = $block_list
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('target_list', 'stimuli/inverted_faces/M125.png'), ('probe_L', 'stimuli/inverted_faces/M125morph.png'), ('probe_R', 'stimuli/inverted_faces/M125.png'), ('correct_resp', 2), ('stim_size', 0.3), ('direction', 'Upright')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M128.png'), ('probe_L', 'stimuli/inverted_faces/M128morph.png'), ('probe_R', 'stimuli/inverted_faces/M128.png'), ('correct_resp', 2), ('stim_size', 0.3), ('direction', 'Upright')]),
        OrderedDict([('target_list', 'stimuli/inverted_bodies/p4F20.png'), ('probe_L', 'stimuli/inverted_bodies/p4F20.png'), ('probe_R', 'stimuli/inverted_bodies/m4F07.png'), ('correct_resp', 1), ('stim_size', 0.3), ('direction', 'Upright')]),
        OrderedDict([('target_list', 'stimuli/inverted_bodies/p3F19.png'), ('probe_L', 'stimuli/inverted_bodies/m3F26.png'), ('probe_R', 'stimuli/inverted_bodies/p3F19.png'), ('correct_resp', 2), ('stim_size', 0.3), ('direction', 'Upright')])]
      Routine Fixation
      Routine EncodingUpright
      Routine ISI
      Routine ProbeUpPractice
      Routine ITI
    LoopTerminator trials_practice_up
    LoopInitiator trials_practice_inv loopType="TrialHandler"
      Selected rows = 2:3
      conditionsFile = $block_list
      loopType = sequential
      nReps = 1
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      Routine Fixation
      Routine EncodingInverted
      Routine ISI
      Routine ProbeInvPractice
      Routine ITI
    LoopTerminator trials_practice_inv
  LoopTerminator blocks_practice
  Routine FB_Practice
  Routine getReady
  LoopInitiator blocks_order loopType="TrialHandler"
    conditionsFile = $order_list
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block_list', 'stimuli/inverted_faces/faces_stimuli_UpShort.csv'), ('fix_dur', 0), ('target_dur', 0.5), ('isi_dur', 0.5), ('probe_dur', 3), ('iti_dur', 1), ('stim_size', 0.41), ('condStim', 'faces'), ('condDur', 'short'), ('condOrient', 'upright'), ('upright_flag', 1), ('inverted_flag', 0)]),
      OrderedDict([('block_list', 'stimuli/inverted_faces/faces_stimuli_UpLong.csv'), ('fix_dur', 0), ('target_dur', 5.0), ('isi_dur', 0.5), ('probe_dur', 3), ('iti_dur', 1), ('stim_size', 0.41), ('condStim', 'faces'), ('condDur', 'long'), ('condOrient', 'upright'), ('upright_flag', 1), ('inverted_flag', 0)]),
      OrderedDict([('block_list', 'stimuli/inverted_faces/faces_stimuli_InvShort.csv'), ('fix_dur', 0), ('target_dur', 0.5), ('isi_dur', 0.5), ('probe_dur', 3), ('iti_dur', 1), ('stim_size', 0.41), ('condStim', 'faces'), ('condDur', 'short'), ('condOrient', 'inverted'), ('upright_flag', 0), ('inverted_flag', 1)]),
      OrderedDict([('block_list', 'stimuli/inverted_faces/faces_stimuli_InvLong.csv'), ('fix_dur', 0), ('target_dur', 5.0), ('isi_dur', 0.5), ('probe_dur', 3), ('iti_dur', 1), ('stim_size', 0.41), ('condStim', 'faces'), ('condDur', 'long'), ('condOrient', 'inverted'), ('upright_flag', 0), ('inverted_flag', 1)])]
    LoopInitiator trials_upright loopType="TrialHandler"
      conditionsFile = $block_list
      loopType = random
      nReps = upright_flag
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      conditions:
        [OrderedDict([('target_list', 'stimuli/inverted_faces/F10.png'), ('probe_list', 'stimuli/inverted_faces/F10morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F11.png'), ('probe_list', 'stimuli/inverted_faces/F11morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F12.png'), ('probe_list', 'stimuli/inverted_faces/F12morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F13.png'), ('probe_list', 'stimuli/inverted_faces/F13morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F15.png'), ('probe_list', 'stimuli/inverted_faces/F15morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F18.png'), ('probe_list', 'stimuli/inverted_faces/F18morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F7.png'), ('probe_list', 'stimuli/inverted_faces/F7morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M121.png'), ('probe_list', 'stimuli/inverted_faces/M121morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M122.png'), ('probe_list', 'stimuli/inverted_faces/M122morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M126.png'), ('probe_list', 'stimuli/inverted_faces/M126morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M129.png'), ('probe_list', 'stimuli/inverted_faces/M129morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M21.png'), ('probe_list', 'stimuli/inverted_faces/M21morph.png')])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
      Routine Fixation
      Routine EncodingUpright
      Routine ISI
      Routine ProbeUpright
      Routine ITI
    LoopTerminator trials_upright
    LoopInitiator trials_inverted loopType="TrialHandler"
      conditionsFile = $block_list
      loopType = random
      nReps = inverted_flag
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      conditions:
        [OrderedDict([('target_list', 'stimuli/inverted_faces/F10.png'), ('probe_list', 'stimuli/inverted_faces/F10morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F11.png'), ('probe_list', 'stimuli/inverted_faces/F11morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F12.png'), ('probe_list', 'stimuli/inverted_faces/F12morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F13.png'), ('probe_list', 'stimuli/inverted_faces/F13morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F15.png'), ('probe_list', 'stimuli/inverted_faces/F15morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F18.png'), ('probe_list', 'stimuli/inverted_faces/F18morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/F7.png'), ('probe_list', 'stimuli/inverted_faces/F7morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M121.png'), ('probe_list', 'stimuli/inverted_faces/M121morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M122.png'), ('probe_list', 'stimuli/inverted_faces/M122morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M126.png'), ('probe_list', 'stimuli/inverted_faces/M126morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M129.png'), ('probe_list', 'stimuli/inverted_faces/M129morph.png')]),
        OrderedDict([('target_list', 'stimuli/inverted_faces/M21.png'), ('probe_list', 'stimuli/inverted_faces/M21morph.png')])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
      Routine Fixation
      Routine EncodingInverted
      Routine ISI
      Routine ProbeInverted
      Routine ITI
    LoopTerminator trials_inverted
    Routine IBI
  LoopTerminator blocks_order
  Routine ThankYou
